load_file("nrngui.hoc")
begintemplate HHneuron

public soma, synlist, connect2target, makeSyn 
create soma
objref esyn, esyn_for_spon, esynSTDP
objref synlist

proc init(){local x, y, z, nsyn, i
    x=$1 y=$2 z=$3 nsyn=$4
    soma {
	pt3dclear() pt3dadd(0+x,0+y,0+z,12) pt3dadd(15+x,0+y,0+z,12)
    }
    
    soma { 
	L = 30
	diam = 30
	nseg = 1
	cm = 1
	insert hh
    }
    synlist = new List()
    soma {
	esyn = new Exp2Syn(0.9)//Exp2Syn(0.8)
	synlist.append(esyn)
	esyn_for_spon = new Exp2Syn(0.8)//Exp2Syn(0.85)
	synlist.append(esyn_for_spon)
	
    }
}

obfunc connect2target(){localobj nc
    soma nc = new NetCon(&v(0.5),$o1)
    nc.threshold = 10
    if(numarg()==2) { $o2 = nc}
    return nc
}

objref syn_

obfunc makeSyn(){local targetno, hostno, num_ecell, num_vta
    targetno = $1
    hostno = $2
    num_ecell = $3
    num_vta = $4
    // if(targetno<num_ecell){
    if(hostno<num_ecell){
	soma { 
	    syn_ = new ExpSynSTDP(0.5)
	    synlist.append(syn_)
	}
	if(targetno<num_vta){
	    syn_.forSpike = 0
	}/*
	if(hostno>=num_ecell){
	    syn_.e = -100
	}*/
    }else{
	soma {
	    syn_ = new Exp2Syn(0.5)
	    synlist.append(syn_)
	    // if(hostno>=num_ecell){
	    syn_.e = -100
	    //	    }
	}
    }
    return syn_
}

endtemplate HHneuron


objref cells
objref recordSpike
objref nil
objref tvec, idvec

proc makeCells(){local i, num_cell, num_ecell localobj cell
    num_cell = $1
    num_ecell = $2
    cells = new List()
    recordSpike = new List()
    tvec = new Vector()
    idvec = new Vector()
    counter = 0
    counter2 = 0
    for i=0, num_cell-1 {
	cell = new HHneuron(160*counter2,20*(i%10),0, NSYN_MAX)
	cells.append(cell)
	cells.object(i).soma recordSpike.append(new NetCon(&v(0.5),nil,0.0,0,1.0))
	recordSpike.object(i).record(tvec, idvec)
	counter = counter + 1
	if(counter==10){
	    counter = 0
	    counter2 = counter2 + 1
	}
    }
}
